# First simulation of 160 kV x-ray tube on tungsten target
# => to record phase space of x-rays

i:Ts/NumberOfThreads = 20

b:Ge/World/Invisible = "TRUE"
s:Ge/World/Material = "Air"

includeFile = cdte_2.txt
includeFile = DES_phantom_2cm.txt
includeFile = Beam.txt
#includeFile = View.txt

s:Sc/PhantomDose/IfOutputFileAlreadyExists = "Increment"
s:Sc/PhantomDose/OutputFile = "Scorer_2cm_basic"

sv:Ma/Water/Components = 2 "Hydrogen" "Oxygen"
uv:Ma/Water/Fractions = 2 0.111894 0.888106
d:Ma/Water/Density = 1.0 g/cm3 
s:Ma/Water/DefaultColor = "lightblue"

# Physics list
s:Ph/ListName = "MyList"
s:Ph/MyList/Type= "Geant4_Modular"
sv:Ph/MyList/Modules = 8 "g4em-standard_opt4" "g4h-phy_QGSP_BERT_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4h-inelastic_QBBC" "g4stopping" "g4em-extra"
#sv:Ph/MyList/Modules = 5 "g4em-standard_opt4" "g4decay" "g4ion-binarycascade" "g4stopping" "g4em-extra"
#d:Ph/MyList/CutForAllParticles = 0.005 mm #by default was 0.05 mm, calculate 0.001mm by 5 eV u/p, times p, then mfp = 1/u for tungsten
										 #CSDA e- range for W is 0.003 cm
										 #according to pattern, 0.005 mm should correspond to 5 keV threshold
#d:Ph/MyList/CutForElectron = 0.05 mm # overrides CutForAllParticles for Electron

i:Ts/ShowHistoryCountAtInterval = 10000 #or whatever makes sense for you

i:Tf/Verbosity = 0 #should be 0 by default, but just in case you may be re-using any parameters sets magdalena sent I might recommend it since she seems to like this option
#i:So/PolyXrayBeam/NumberOfHistoriesInRun   = 100000
#i:Ts/Seed = 146888

b:Ts/PauseBeforeQuit = "False"

s:Ge/BeamPosition/Type     = "Group"
s:Ge/BeamPosition/Parent   = "World"
s:Ge/BeamPosition/Material = "Vacuum"
d:Ge/BeamPosition/TransX   = 0. cm
d:Ge/BeamPosition/TransY   = 100. cm
d:Ge/BeamPosition/TransZ   = 0. cm
d:Ge/BeamPosition/RotX     = 270. deg
d:Ge/BeamPosition/RotY     = 0. deg
d:Ge/BeamPosition/RotZ     = 120. deg

i:ts/seed= 10
